<PlusConfiguration version="2.7">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="Simple pointer tracking"
      Description="Broadcasting tracking data from Atracsys through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="AtracsysTracker"
      MaxMissingFiducials="1"
      MaxMeanRegistrationErrorMm="1.0"
      ActiveMarkerPairingTimeSec="15"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" TrackingType="PASSIVE" GeometryFile="AtracsysTools/pointer.ini" />
        <DataSource Type="Tool" Id="Reference" TrackingType="PASSIVE" GeometryFile="AtracsysTools/reference.ini" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToReference" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
